setBatchMode(true);

dir_input = 'C:/Users/Frank/Documents/PhD/Programming/franco/data/1 - raw/';
dir_output = 'C:/Users/Frank/Documents/PhD/Programming/franco/data/1 - raw tmp/';
lag = 25

list = getFileList(dir_input);
for (k=0; k<list.length; k++) {


if (endsWith(list[k],"avi")){
run("AVI...", "select=["+dir_input+list[k]+"] convert");
original = getTitle();
getDimensions(width, height, channels, slices, frames);
//run("Make Substack...", "  slices="+lag+"-"+slices+"");
vid1 = getTitle();
selectWindow(original);
run("Make Substack...", "  slices="+lag+"-"+slices+"");
vid2 = getTitle();
selectWindow(vid1);
run("Make Substack...", "  slices=1-"+(lag-1)+"");
vid3 = getTitle();
run("Concatenate...", "  image1=["+vid2+"] image2=["+vid3+"] image3=[-- None --]");
vid4 = getTitle();
}

if (endsWith(list[k],"cxd")){
run("Bio-Formats", "open=["+dir_input+list[k]+"] autoscale color_mode=Default view=[Standard ImageJ] stack_order=Default");
run("8-bit"");
original = getTitle();
getDimensions(width, height, channels, slices, frames);
//run("Make Substack...", "  slices="+lag+"-"+frames+"");
vid1 = getTitle();
//selectWindow(original);
//run("Make Substack...", "  slices=1-"+frames-(lag-1)+"");

vid1 = getTitle();
selectWindow(original);
run("Make Substack...", "  slices="+lag+"-"+slices+"");
vid2 = getTitle();
selectWindow(vid1);
run("Make Substack...", "  slices=1-"+(lag-1)+"");
vid3 = getTitle();
run("Concatenate...", "  image1=["+vid2+"] image2=["+vid3+"] image3=[-- None --]");
vid4 = getTitle();


}

//vid2 = getTitle();
selectWindow(original);
close();
//imageCalculator("Subtract create stack", vid2, vid1);
//vid3 = getTitle();
//selectWindow(vid3);


imageCalculator("Subtract create stack", vid1, vid4);
vid4 = getTitle();
selectWindow(vid4);



// perhaps use autothreshold?
// setAutoThreshold("Default light");

setThreshold(0, 1000);
run("Convert to Mask", "  black");

run("Median...", "radius=4 stack");

// Find Stack Maxima Macro is used in modified form
// Function applied to transform cells into their centroid position (1 pixel)
// Advantage of centroid is the easier definition of the size of target objects for the tracking algorithm 

  tolerance = 5;
  type = "Single Points";
  exclude = false;
  light = false;
  options = "";
  if (exclude) options = options + " exclude";
  if (light) options = options + " light";
  input = getImageID();
  n = nSlices();
  for (i=1; i<=n; i++) {
     showProgress(i, n);
     selectImage(input);
     setSlice(i);
     run("Find Maxima...", "noise="+ tolerance +" output=["+type+"]"+options);
     if (i==1)
        output = getImageID();
    else if (type!="Count") {
       run("Select All");
       run("Copy");
       close();
       selectImage(output);
       run("Add Slice");
       run("Paste");
    }
  }
vid4 = getTitle();
  
selectWindow(vid4);
run("AVI... ", "compression=Uncompressed frame=26 save=["+dir_output+replace(list[k],".cxd",".avi")+"]");
close();
close();
close();
close();

// de-activate batch mode, otherwise ParticleTracker does not produce output
setBatchMode(false);
// re-open image sequence after saving
run("AVI...", "select=["+dir_output+replace(list[k],".cxd",".avi")+"] convert");
getDimensions(width, height, channels, slices, frames);
run("Properties...", "channels=1 slices=1 frames="+slices+" unit=pixel pixel_width=1.0000 pixel_height=1.0000 voxel_depth=1.0000 frame=[0 sec] origin=0,0");
run("Particle Tracker 2D/3D", "radius=1 cutoff=0 percentile=0.01 link=5 displacement=20");
close();
setBatchMode(true);

// delete the temporary video file
File.delete(dir_output+replace(list[k],".cxd",".avi"));
//close();

}
run("Quit");


